PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001', 'task': 'Flanker'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  expName = EriksenFlanker
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine trials_text
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    TextComponent fixation_cross
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = +
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    TextComponent target
      letterHeight = 0.1
      pos = (0, 0.05)
      startVal [time (s)] = 0
      text [set every repeat] = $target_arrow
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    TextComponent dist_1
      letterHeight = 0.1
      pos = (-0.12, 0.05)
      startVal [time (s)] = 0
      text [set every repeat] = $distractor_arrow
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    TextComponent dist_2
      letterHeight = 0.1
      pos = (-0.24, 0.05)
      startVal [time (s)] = 0
      text [set every repeat] = $distractor_arrow
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    TextComponent dist_3
      letterHeight = 0.1
      pos = (0.12, 0.05)
      startVal [time (s)] = 0
      text [set every repeat] = $distractor_arrow
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    TextComponent dist_4
      letterHeight = 0.1
      pos = (0.24, 0.05)
      startVal [time (s)] = 0
      text [set every repeat] = $distractor_arrow
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    KeyboardComponent key_resp_text
      allowedKeys = 'z','slash'
      correctAns = correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine trials_images
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    ImageComponent stim
      image [set every repeat] = $image
      pos = (0, 0.1)
      size = (1.5, 1)
      startVal [time (s)] = 0.500
      stopVal [duration (s)] = 2.300
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    TextComponent fixationcross
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.08
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.300
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 'z','slash'
      correctAns = correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.500
      stopVal [duration (s)] = 2.3
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    CodeComponent code
      Code Type = Both
      Begin JS Experiment:
        var msg = ""; // Ensures msg exists globally
        var corr = 0;
      Begin Routine:
        corr=0
      End JS Routine:
        if (key_resp.keys === correct_resp) {
            corr = 1;
            msg = "Correct!";
        } else {
            corr = 0;
            msg = "Incorrect";
        }
        psychoJS.experiment.addData("correct", corr);
      End Routine:
        if key_resp.keys==correct_resp:
            corr=1
            msg="Correct!"
        else:
            corr=0
            msg="Incorrect"

        thisExp.addData('correct', corr)
  Routine feedback
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    TextComponent feedback_message
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg
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  Routine official
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    TextComponent instructions_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The experiment will now properly begin. This will be identical to the trials you just practiced but feedback will not be provided.

        Please reply as fast and as accurately as possible.

        You will be offered a break after a number of trials.

        Press the spacebar when you are ready to begin.
    KeyboardComponent spaceresp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
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    TextComponent instructions_1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will see a single row of arrows pointing left or right.

        Your task is to indicate in which direction the MIDDLE arrow is pointing and ignore any other arrows.

        The row of arrows will appear above a fixation cross. Please try not to move your eyes from the fixation cross when giving your response.


        Press the spacebar to see an example of this task.
    KeyboardComponent spaceresp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_counterbalance
      Code Type = Auto->JS
      Begin Experiment:
        #if int(expInfo['participant']) % 2:
        #    conditions = "officialdigitsA.xlsx"
        #    group='A'

        #else:
        #    conditions = "officialdigitsB.xlsx"
        #    group='B'
  Routine example
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    ImageComponent example_image
      image = example_1.png
      pos = (0, 0.1)
      size = (0.8,0.24)
      startVal [time (s)] = 0.0
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    TextComponent instructions_2
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        In the example above, your response should be the '/' key because the middle arrow is facing right.

        In the following you will have an opportunity to practice the task.

        Press the spacebar when you are ready to begin.
    KeyboardComponent spaceresp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest_1
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    TextComponent instructions_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You may take a break.

        Press the spacebar when you are ready to continue.
    KeyboardComponent spaceresp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest_2
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    TextComponent instructions_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are half way through! You may take a break.

        Press the spacebar when you are ready to continue.
    KeyboardComponent spaceresp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest_3
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    TextComponent instructions_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You may take a break.

        Press the spacebar when you are ready to continue.
    KeyboardComponent spaceresp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent instructions_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank you for participating in this experiment!

        This experiment is now over and the screen will close in a few seconds.

        In the meanwhile please wait for the researcher.
Flow
  Routine practice
  Routine example
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = conditions_image.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'image': 'congruent_left.png', 'target': 'left', 'distractor': 'left', 'trial_type': 'congruent', 'target_arrow': '←', 'distractor_arrow': '←', 'correct_resp': 'z'},
      {'image': 'congruent_right.png', 'target': 'right', 'distractor': 'right', 'trial_type': 'congruent', 'target_arrow': '→', 'distractor_arrow': '→', 'correct_resp': 'slash'},
      {'image': 'congruent_left.png', 'target': 'left', 'distractor': 'left', 'trial_type': 'congruent', 'target_arrow': '←', 'distractor_arrow': '←', 'correct_resp': 'z'},
      {'image': 'congruent_right.png', 'target': 'right', 'distractor': 'right', 'trial_type': 'congruent', 'target_arrow': '→', 'distractor_arrow': '→', 'correct_resp': 'slash'},
      {'image': 'congruent_left.png', 'target': 'left', 'distractor': 'left', 'trial_type': 'congruent', 'target_arrow': '←', 'distractor_arrow': '←', 'correct_resp': 'z'},
      {'image': 'congruent_right.png', 'target': 'right', 'distractor': 'right', 'trial_type': 'congruent', 'target_arrow': '→', 'distractor_arrow': '→', 'correct_resp': 'slash'},
      {'image': 'incongruent_left', 'target': 'left', 'distractor': 'right', 'trial_type': 'incongruent', 'target_arrow': '←', 'distractor_arrow': '→', 'correct_resp': 'z'},
      {'image': 'incongruent_right', 'target': 'right', 'distractor': 'left', 'trial_type': 'incongruent', 'target_arrow': '→', 'distractor_arrow': '←', 'correct_resp': 'slash'}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
    Routine trials_images
    Routine feedback
  LoopTerminator trials_practice
  Routine official
  LoopInitiator trials_off_1 loopType="TrialHandler"
    conditionsFile = conditions_image.xlsx
    loopType = fullRandom
    nReps = 5
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    conditions:
      [{'image': '/Users/rebekah/Library/CloudStorage/OneDrive-Personal/UM/Experiments code/Eriksen Flanker/congruent_left.png', 'target': 'left', 'distractor': 'left', 'trial_type': 'congruent', 'target_arrow': '←', 'distractor_arrow': '←', 'correct_resp': 'z'},
      {'image': '/Users/rebekah/Library/CloudStorage/OneDrive-Personal/UM/Experiments code/Eriksen Flanker/congruent_right.png', 'target': 'right', 'distractor': 'right', 'trial_type': 'congruent', 'target_arrow': '→', 'distractor_arrow': '→', 'correct_resp': 'slash'},
      {'image': '/Users/rebekah/Library/CloudStorage/OneDrive-Personal/UM/Experiments code/Eriksen Flanker/congruent_left.png', 'target': 'left', 'distractor': 'left', 'trial_type': 'congruent', 'target_arrow': '←', 'distractor_arrow': '←', 'correct_resp': 'z'},
      {'image': '/Users/rebekah/Library/CloudStorage/OneDrive-Personal/UM/Experiments code/Eriksen Flanker/congruent_right.png', 'target': 'right', 'distractor': 'right', 'trial_type': 'congruent', 'target_arrow': '→', 'distractor_arrow': '→', 'correct_resp': 'slash'},
      {'image': '/Users/rebekah/Library/CloudStorage/OneDrive-Personal/UM/Experiments code/Eriksen Flanker/congruent_left.png', 'target': 'left', 'distractor': 'left', 'trial_type': 'congruent', 'target_arrow': '←', 'distractor_arrow': '←', 'correct_resp': 'z'}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
    Routine trials_images
  LoopTerminator trials_off_1
  Routine rest_1
  LoopInitiator trials_off_2 loopType="TrialHandler"
    conditionsFile = conditions_image.xlsx
    loopType = fullRandom
    nReps = 5
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    conditions:
      [{'image': '/Users/rebekah/Library/CloudStorage/OneDrive-Personal/UM/Experiments code/Eriksen Flanker/congruent_left.png', 'target': 'left', 'distractor': 'left', 'trial_type': 'congruent', 'target_arrow': '←', 'distractor_arrow': '←', 'correct_resp': 'z'},
      {'image': '/Users/rebekah/Library/CloudStorage/OneDrive-Personal/UM/Experiments code/Eriksen Flanker/congruent_right.png', 'target': 'right', 'distractor': 'right', 'trial_type': 'congruent', 'target_arrow': '→', 'distractor_arrow': '→', 'correct_resp': 'slash'},
      {'image': '/Users/rebekah/Library/CloudStorage/OneDrive-Personal/UM/Experiments code/Eriksen Flanker/congruent_left.png', 'target': 'left', 'distractor': 'left', 'trial_type': 'congruent', 'target_arrow': '←', 'distractor_arrow': '←', 'correct_resp': 'z'},
      {'image': '/Users/rebekah/Library/CloudStorage/OneDrive-Personal/UM/Experiments code/Eriksen Flanker/congruent_right.png', 'target': 'right', 'distractor': 'right', 'trial_type': 'congruent', 'target_arrow': '→', 'distractor_arrow': '→', 'correct_resp': 'slash'},
      {'image': '/Users/rebekah/Library/CloudStorage/OneDrive-Personal/UM/Experiments code/Eriksen Flanker/congruent_left.png', 'target': 'left', 'distractor': 'left', 'trial_type': 'congruent', 'target_arrow': '←', 'distractor_arrow': '←', 'correct_resp': 'z'}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
    Routine trials_images
  LoopTerminator trials_off_2
  Routine rest_2
  LoopInitiator trials_off_3 loopType="TrialHandler"
    conditionsFile = conditions_image.xlsx
    loopType = fullRandom
    nReps = 5
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    conditions:
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    Routine trials_images
  LoopTerminator trials_off_3
  Routine rest_3
  LoopInitiator trials_off_4 loopType="TrialHandler"
    conditionsFile = conditions_image.xlsx
    loopType = fullRandom
    nReps = 5
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    conditions:
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    Routine trials_images
  LoopTerminator trials_off_4
  Routine end
